PsychoPy2experiment version="2021.2.1"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'experimenter': '', 'phase': "['prac', 'real']", 'eeg_record': "['yes', 'no']", 'show_control_monitor': "['yes', 'no']"}
  Full-screen window = True
  Monitor = BenQ
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  color = $[0.0,0.0,0.0]
  expName = sof_1back_task
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_parameter_code
      Code Type = Py
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      Before Experiment:
        # Import math module
        from math import atan2, degrees, cos, sin
      Begin Experiment:
        # Mouse start position radius
        mouse_start_radius = teardrop_size + .15 + 1.5
      Begin Routine:
        # Set mouse visibility
        trial_mouse.setVisible(0)

        # Determine the true angle and store it
        shuffle(angle_errors)
        this_error = angle_errors[0]
        study_angle = angle_bin + this_error

        # Determine test_prob starting angle
        shuffle(test_angles)
        test_angle = test_angles[0]

        # Get starting angle and start x and y
        start_pos = (mouse_start_radius * cos(test_angle),
                     mouse_start_radius * sin(test_angle))
      Each Frame:
        # Get the mouse position and update test angle
        if trial_mouse.status == STARTED:
            if trial_mouse.frameNStart + hide_mouse_duration == frameN:
                trial_mouse.setVisible(1)
                trial_mouse.setPos(newPos=start_pos)

            if trial_mouse.frameNStart + hide_mouse_duration < frameN:
                x, y = trial_mouse.getPos()
                test_angle = -1 * degrees(atan2(y, x)) # Angle on unit circle
                if test_angle < 0:
                    test_angle += 360
      End Routine:
        # Send response trigger
        if eeg_record:

            # Make call to send trigger
            win.callOnFlip(eeg_trig_box.write, [51])
            resp_trigger_sent = True
            resp_marker_frame = frameN

        # Add data to trialHandler
        trials.addData(u'angle_error', this_error)
        trials.addData(u'study_angle', study_angle)
        trials.addData(u'test_angle', test_angle)
        angle_error = (((test_angle - study_angle) + 180 + 360) % 360) - 180
        trials.addData(u'angle_error', angle_error) # Negative values follow unit circle convention. Everything is center on 90degrees in a unit circle
        if eeg_record:
            trials.addData(u'stim_trigger_frame', stim_marker_frame)
            trials.addData(u'resp_trigger_frame', resp_marker_frame)
    CodeComponent send_eeg_trigger
      Code Type = Py
      Begin Routine:
        # Reset the trigger
        if eeg_record:
            eeg_trig_box.write(reset_bit)

        # At start of the trial, indicate I have not snt a trigger
        stim_trigger_sent = False
        stim_trigger_frame = 0
      Each Frame:
        # Send trigger if needed
        if eeg_record:
            if study_probe.status == STARTED:
                if not stim_trigger_sent:
                    win.callOnFlip(eeg_trig_box.write, [marker])
                    stim_trigger_sent = True
                    stim_trigger_frame = frameN

            # Reset the trigger at the next flip
            if stim_trigger_sent and frameN == stim_trigger_frame + 1:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
    PolygonComponent trial_fixation
      durationEstim = 7.5
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.25, 0.25)
      startEstim = .5
      startVal [frame N] = nofix_baseline_duration
      units = degFlat
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    PolygonComponent photosensor_dot
      durationEstim = .2
      fillColor = $[1,1,1]
      nVertices = 180
      pos = (-24.0, 0.0)
      shape = circle
      size = (0.75,0.75)
      startEstim = 1.5
      startVal [frame N] = iti_duration + nofix_baseline_duration
      stopVal [duration (frames)] = study_duration
      units = degFlat
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    ImageComponent study_probe
      durationEstim = .2
      image = teardrop.png
      ori [set every repeat] = study_angle
      size = (teardrop_size, teardrop_size)
      startEstim = 1.5
      startVal [frame N] = iti_duration + nofix_baseline_duration
      stopVal [duration (frames)] = study_duration
      units = degFlat
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    PolygonComponent response_ring
      durationEstim = 5
      fillColor = $[0,0,0]
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (teardrop_size+.15, teardrop_size+.15)
      startEstim = 3
      startVal [frame N] = nofix_baseline_duration + iti_duration + study_duration + isi_duration 
      units = degFlat
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    ImageComponent test_probe
      durationEstim = 5
      image = teardrop.png
      ori [set every frame] = test_angle
      size = (teardrop_size, teardrop_size)
      startEstim = 3
      startVal [frame N] = nofix_baseline_duration + iti_duration + study_duration + isi_duration 
      units = degFlat
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    MouseComponent trial_mouse
      durationEstim = 5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startEstim = 3
      startVal [frame N] = nofix_baseline_duration + iti_duration + study_duration + isi_duration 
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine delay
    CodeComponent delay_control_monitor
      Code Type = Py
      Begin Routine:
        # Determine if delay is needed
        if draw_delay:
            continueRoutine = True
        else:
            continueRoutine = False

        if eeg_record and show_control:
            control_text.setText('Task')
            control_text.draw()
            win2.flip()
    PolygonComponent delay_fixation
      durationEstim = 10
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.25, 0.25)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = delay_duration
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  Routine instructions
    CodeComponent instructions_control_monitor
      Code Type = Py
      Begin Routine:
        # Display on control monitor if needed
        if show_control:
            control_text.setText('Instructions')
            control_text.draw()
            win2.flip()
    ImageComponent instruction_image
      disabled = True
      image [set every repeat] = $instruction_image_file
      size = (14, 7.875)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine save_trials
    CodeComponent save_trial_handler
      Code Type = Py
      Begin Routine:
        # Make the save file name (This should have accurate id as it is reading from it)
        save_file_name = f"sub-{expInfo['id']}_task-sof_run-{expInfo['phase']}_beh"
        save_pickle = save_dir /  save_file_name
        save_tsv = save_dir / (save_file_name + '.tsv')
        save_csv = save_dir / (save_file_name + '.csv')

        # Save it many different ways
        trials.saveAsWideText(save_tsv)
        trials.saveAsWideText(save_csv)
        trials.saveAsPickle(save_pickle)
    PolygonComponent final_fixation
      durationEstim = 10
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.25, 0.25)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = delay_duration
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  Routine task_complete
    CodeComponent task_complete_control_monitor
      Code Type = Py
      Begin Routine:
        if eeg_record and show_control:
            control_text.setText('TASK COMPLETE')
            control_text.draw()
            win2.flip()
    CodeComponent save_experiment_handler
      Code Type = Py
      Begin Routine:
        # Resave experiment handler just in case
        # This is copied from code generated by PsychoPy Builder
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
    TextComponent task_complete_text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This task is now complete.
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  Routine task_break
    CodeComponent task_break_code
      Code Type = Py
      Begin Routine:
        # Determine if a break is needed
        if trials.thisN == 0:
            continueRoutine = False
            draw_delay = True
        elif trials.thisN % task_break_n != 0:
            continueRoutine = False
            draw_delay = False
        else:
            continueRoutine = True
            draw_delay = True

        # Show control monitor if needed
        if eeg_record and continueRoutine and show_control:
            control_text.setText('Break')
            control_text.draw()
            win2.flip()
    TextComponent break_text1
      letterHeight = 1
      startVal [time (s)] = 0
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      text [set every repeat]:
        Take a break
    TextComponent break_text2
      letterHeight = 1
      startVal [time (s)] = 30
      wrapWidth = 120
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      text:
        Let the experimenter know when you are ready to continue.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
      store = nothing
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  Routine config
    CodeComponent configure_options
      Code Type = Py
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      Begin Experiment:
        ## Import some useful libraries
        from pathlib import Path
        from random import shuffle
        import pandas as pd
        import numpy as np

        ## TASK PARAMETERS
        # Teardrop size in visual degrees
        teardrop_size = 2.25

        # Number of repeats of each orientation (# of trials = 16*n_repeats)
        n_repeats = 20
        n_breaks = 8

        # Define number of trials between rests automatically
        task_break_n = (16 * n_repeats) / 8

        # Auto set these values if practice
        if expInfo['phase'] == 'prac':
            n_repeats = 1
            task_break_n = 1000 # Set arbitrarily high to avoid breaks.

        # Get angles for test
        test_angles = np.arange(-180, 180)  # Produces 0 to 359 degrees
        test_angle = 0 # Initialize. Will be updated for each trial

        # Set the angle error for a bin (to avoid categorical coding)
        angle_abs_error = 4
        angle_errors = np.arange(-angle_abs_error, angle_abs_error + 1)
        this_error = 0 # Initialize, will be updated for each trial

        ## TIMING OPTIONS
        # Timing Variables (all are in seconds)
        # These are converted to frames in the Begin Routine tab (changed in place)
        study_duration = .2 # Length the study teardrop is on the screen
        isi_duration = 1.3 # Length of the interval between teardrop study offset and test probe onset
        delay_duration = 1.0 # Time padding beginning and end of a trial segment.
        iti_duration = 1.0 # Time between test response and next trial
        hide_mouse_duration = .15 # Time mouse is hidden before showing and allowing a response
        nofix_baseline_duration = .5 # Time with no fixation cross

        ## EEG SETUP TRIGGER OPTIONS
        eeg_com = 'COM5' # Can check the Device Manager in windows to figure this out (COM Ports).
        reset_bit = [0] # Don't change this unless you know what you are doing
      Begin Routine:
        # Note that frameDur is the duration of a single frame estimated
        # by psychopy. If it fails to detect in (e.g., frameRate == Null),
        # this typically defaults to 60.0 Hz. Note that this timing scheme
        # allows for reproducibility across systems (monitors, computers, etc.)

        # THE FOLLOWING SHOULD NOT BE CHANGED (minus variable names)

        # Critical timing pieces
        study_duration = round(study_duration / frameDur)
        isi_duration = round(isi_duration / frameDur)
        iti_duration = round(iti_duration / frameDur)
        nofix_baseline_duration = round(nofix_baseline_duration / frameDur)
        delay_duration = round(delay_duration / frameDur)
        hide_mouse_duration = round(hide_mouse_duration / frameDur)
  Routine setup
    CodeComponent frame_rate_optimization
      Code Type = Py
      Begin Experiment:
        ## FRAM RATE OPTIMIZATION OPTIONS
        processPriority = 'realtime' # Can be 'normal', 'high', 'realtime'
        disableGC = True # disable garbage collection

        # Import garbage collection module
        import gc

        # Handle Priority stuff
        if processPriority == 'normal':
            pass
        elif processPriority == 'high':
            core.rush(True)
        elif processPriority == 'realtime':
            # Only makes a diff compared to 'high' on Windows.
            core.rush(True, realtime=True)
        else:
            raise Exception('Invalid process priority:', processPriority, "Process running at normal.")

        # Handle Garbage Collection
        if disableGC:
            gc.disable()
    CodeComponent info_gui_code
      Code Type = Py
      Begin Experiment:
        # Define eeg_record
        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['eeg_record'] == 'yes' and expInfo['phase'] == 'real':
            eeg_record = True
        else:
            eeg_record = False

        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['show_control_monitor'] == 'yes':
            show_control = True
        else:
            show_control = False

        # Check if frameRate can be determined, if not, exit out
        frameRate = expInfo['frameRate']
        if frameRate == None:
            print('frame rate not established. Try Again.')
            win.close()
            core.quit()

        # Verify everything
        if show_control:
            dlg = gui.DlgFromDict(dictionary=expInfo, title='Is this information correct?')
            if dlg.OK == False:
                win.close()
                core.quit()  # user pressed cancel
    CodeComponent control_monitor_code
      Code Type = Py
      Begin Experiment:
        # Setup window 2 only if asked too
        if show_control:

            win2 = visual.Window(
                size=[1920,1080], fullscr=True, screen=1,
                allowGUI=False, allowStencil=False,
                color=[-1.0,-1.0,-1.0], colorSpace='rgb',
                blendMode='avg', useFBO=True,
                units='pix')

            control_text = visual.TextStim(win=win2,
                text='default text',
                font='Helvetica',
                pos=(0, 0), height=32, wrapWidth=200, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                depth=-1.0);
      End Experiment:
        # Close the control room monitor
        if show_control and eeg_record:
            win2.close()
    CodeComponent data_save_setup
      Code Type = Py
      Begin Experiment:
        # Setup save directorya
        save_dir = Path('data') / f"sub-{expInfo['id']}"
        save_dir.mkdir(exist_ok=True, parents=True)
    CodeComponent eeg_trigger_setup
      Code Type = Py
      Begin Experiment:
        if eeg_record:

            # Import library
            import serial

            # Setup box
            eeg_trig_box = serial.Serial(eeg_com)
            eeg_trig_box.write(reset_bit)
      End Experiment:
        # Return bits to low state, then close connection
        if eeg_record:
            eeg_trig_box.write(reset_bit)
            eeg_trig_box.close()
  Routine jitter
    PolygonComponent iti_fixation
      durationEstim = 1.0
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.25, 0.25)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = iti_duration
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Flow
  Routine config
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = angle_conditions.csv
    loopType = fullRandom
    nReps = n_repeats
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    conditions:
      [OrderedDict([('angle_bin', 0.0), ('marker', 11)]),
      OrderedDict([('angle_bin', 22.5), ('marker', 12)]),
      OrderedDict([('angle_bin', 45.0), ('marker', 13)]),
      OrderedDict([('angle_bin', 67.5), ('marker', 14)]),
      OrderedDict([('angle_bin', 90.0), ('marker', 15)]),
      OrderedDict([('angle_bin', 112.5), ('marker', 16)]),
      OrderedDict([('angle_bin', 135.0), ('marker', 17)]),
      OrderedDict([('angle_bin', 157.5), ('marker', 18)]),
      OrderedDict([('angle_bin', 180.0), ('marker', 19)]),
      OrderedDict([('angle_bin', 202.5), ('marker', 20)]),
      OrderedDict([('angle_bin', 225.0), ('marker', 21)]),
      OrderedDict([('angle_bin', 247.5), ('marker', 22)]),
      OrderedDict([('angle_bin', 270.0), ('marker', 23)]),
      OrderedDict([('angle_bin', 292.5), ('marker', 24)]),
      OrderedDict([('angle_bin', 315.0), ('marker', 25)]),
      OrderedDict([('angle_bin', 337.5), ('marker', 26)])]
    Routine task_break
    Routine delay
    Routine trial
  LoopTerminator trials
  Routine save_trials
  Routine task_complete
